PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'gender': '["m", "w", "d"]', 'age': 'f"{randint(18, 35):02.0f}"'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1280, 1024]
  expName = GazeEst
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine instructions_training
    TextComponent inst_train
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      wrapWidth = 1.75
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      text:
        Trainingsblock

        In den folgenden 9 Durchgängen haben Sie die Möglichkeit, sich mit dem Ablauf des Experimentes vertraut zu machen.

        Die Aufgabe:
        Bitte schätzen Sie unter Zuhilfenahme der vor Ihnen platzierten Leiste und Skala den Punkt auf der Leiste/Skala ein, der von der auf dem Bildschirm präsentierten Person angeschaut wird.
        Geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox ein.

        Im Anschluss an das Training haben Sie die Möglichkeit, mögliche Fragen mit dem:der Versuchsleiter:in zu klären.
    TextComponent inst_train_continue
      letterHeight = 0.05
      startVal [time (s)] = 10.0
      wrapWidth = 1.75
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      text:
        Trainingsblock

        In den folgenden 9 Durchgängen haben Sie die Möglichkeit, sich mit dem Ablauf des Experimentes vertraut zu machen.

        Die Aufgabe:
        Bitte schätzen Sie unter Zuhilfenahme der vor Ihnen platzierten Leiste und Skala den Punkt auf der Leiste/Skala ein, der von der auf dem Bildschirm präsentierten Person angeschaut wird.
        Geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox ein.

        Im Anschluss an das Training haben Sie die Möglichkeit, mögliche Fragen mit dem:der Versuchsleiter:in zu klären.

        Weiter durch Drücken der LEERTASTE
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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  Routine instructions_experiment
    TextComponent inst_exp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      wrapWidth = 1.75
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      text:
        Herzlich Willkommen.

        In dieser Studie untersuchen wir, wie wir die Blicke anderer Personen wahrnehmen.

        Dazu werden Ihnen im Folgenden die Fotos verschiedener Personen gezeigt. Ihre Aufgabe besteht darin, die Blickrichtung der gerade auf dem Bildschirm präsentierten Person einzuschätzen.

        Genauer geht es darum, einzuschätzen, welchen Punkt der vor Ihnen platzierten Leiste die Person in dem Foto anschaut. Wenn Sie sich entschieden haben, geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox auf dem Bildschirm ein.
    TextComponent inst_exp_continue
      letterHeight = 0.05
      startVal [time (s)] = 10.0
      wrapWidth = 1.75
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      text:
        Herzlich Willkommen.

        In dieser Studie untersuchen wir, wie wir die Blicke anderer Personen wahrnehmen.

        Dazu werden Ihnen im Folgenden die Fotos verschiedener Personen gezeigt. Ihre Aufgabe besteht darin, die Blickrichtung der gerade auf dem Bildschirm präsentierten Person einzuschätzen.

        Genauer geht es darum, einzuschätzen, welchen Punkt der vor Ihnen platzierten Leiste die Person in dem Foto anschaut. Wenn Sie sich entschieden haben, geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox auf dem Bildschirm ein.


        Weiter durch Drücken der LEERTASTE
    KeyboardComponent kb_inst
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training
    ImageComponent img_training
      image [set every repeat] = $img_rel_path
      size = (2, 1.6)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent judgement
      color = -0.4667, -0.4667, -0.4667
      letterHeight = 0.05
      pos = (0.6, -0.6)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        judgement.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'backspace' in keys:
                judgement.text = judgement.text[:-1]
            elif 'return' in keys:
                continueRoutine = False
            else:
                judgement.text = judgement.text + keys[0]
      End Routine:
        thisExp.addData("answer", judgement.text)
Flow
  Routine instructions_experiment
  Routine instructions_training
  LoopInitiator trials_training loopType="TrialHandler"
    conditionsFile = cond_training.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_00.JPG', 'img_rel_path': 'img_train\\F02_00.JPG', 'looker': 'F02', 'visAng': 0.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_01.JPG', 'img_rel_path': 'img_train\\F02_01.JPG', 'looker': 'F02', 'visAng': 1.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_02.JPG', 'img_rel_path': 'img_train\\F02_02.JPG', 'looker': 'F02', 'visAng': 2.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_03.JPG', 'img_rel_path': 'img_train\\F02_03.JPG', 'looker': 'F02', 'visAng': 3.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_04.JPG', 'img_rel_path': 'img_train\\F02_04.JPG', 'looker': 'F02', 'visAng': 4.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_05.JPG', 'img_rel_path': 'img_train\\F02_05.JPG', 'looker': 'F02', 'visAng': 5.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_06.JPG', 'img_rel_path': 'img_train\\F02_06.JPG', 'looker': 'F02', 'visAng': 6.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_07.JPG', 'img_rel_path': 'img_train\\F02_07.JPG', 'looker': 'F02', 'visAng': 7.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_08.JPG', 'img_rel_path': 'img_train\\F02_08.JPG', 'looker': 'F02', 'visAng': 8.0}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
    Routine training
  LoopTerminator trials_training
  Routine trial
