PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'gender': '["m", "w", "d"]', 'age': 'f"{randint(18, 35):02.0f}"'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1280, 1024]
  expName = GazeEst_Angepasst
  keyboardBackend = ioHub
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Routines
  Routine instructions_training
    TextComponent inst_train
      durationEstim = 5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $d_inst_train
      wrapWidth = 1.75
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      text:
        Trainingsblock

        In den folgenden 10 Durchgängen haben Sie die Möglichkeit, sich mit dem Ablauf des Experimentes vertraut zu machen.

        Die Aufgabe:
        Bitte schätzen Sie unter Zuhilfenahme der vor Ihnen platzierten Leiste und Skala den Punkt auf der Leiste/Skala ein, der von der auf dem Bildschirm präsentierten Person angeschaut wird.
        Geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox ein.

        Im Anschluss an das Training haben Sie die Möglichkeit, mögliche Fragen mit dem:der Versuchsleiter:in zu klären.
    TextComponent inst_train_continue
      letterHeight = 0.05
      startEstim = 5
      startVal [time (s)] = $d_inst_train
      wrapWidth = 1.75
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      text:
        Trainingsblock

        In den folgenden 10 Durchgängen haben Sie die Möglichkeit, sich mit dem Ablauf des Experimentes vertraut zu machen.

        Die Aufgabe:
        Bitte schätzen Sie unter Zuhilfenahme der vor Ihnen platzierten Leiste und Skala den Punkt auf der Leiste/Skala ein, der von der auf dem Bildschirm präsentierten Person angeschaut wird.
        Geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox ein.

        Im Anschluss an das Training haben Sie die Möglichkeit, mögliche Fragen mit dem:der Versuchsleiter:in zu klären.

        Weiter durch Drücken der LEERTASTE
    KeyboardComponent key_inst_train
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 5
      startVal [time (s)] = $d_inst_train
      store = nothing
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  Routine training
    ImageComponent img_training
      image [set every repeat] = $img_rel_path
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent judgement
      bold = False
      borderColor = -0.3020, -0.3020, -0.3020
      borderWidth = 1
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      pos = (0, -0.9)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_training
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        judgement.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'backspace' in keys:
                judgement.text = judgement.text[:-1]
            elif 'return' in keys:
                continueRoutine = False
            else:
                judgement.text = judgement.text + keys[0]
      End Routine:
        thisExp.addData("answer", judgement.text)
  Routine instructions_experiment_2
  Routine instructions_start
    TextComponent inst_exp
      durationEstim = 5
      letterHeight = 0.05
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $d_inst_start
      wrapWidth = 1.75
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      text:
        Herzlich Willkommen.

        In dieser Studie untersuchen wir, wie wir die Blicke anderer Personen wahrnehmen.

        Dazu werden Ihnen im Folgenden die Fotos verschiedener Personen gezeigt. Ihre Aufgabe besteht darin, die Blickrichtung der gerade auf dem Bildschirm präsentierten Person einzuschätzen.

        Genauer geht es darum, einzuschätzen, welchen Punkt der vor Ihnen platzierten Leiste die Person in dem Foto anschaut. Wenn Sie sich entschieden haben, geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox auf dem Bildschirm ein.
    TextComponent inst_exp_continue
      letterHeight = 0.05
      startEstim = 5
      startVal [time (s)] = $d_inst_start
      wrapWidth = 1.75
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      text:
        Herzlich Willkommen.

        In dieser Studie untersuchen wir, wie wir die Blicke anderer Personen wahrnehmen.

        Dazu werden Ihnen im Folgenden die Fotos verschiedener Personen gezeigt. Ihre Aufgabe besteht darin, die Blickrichtung der gerade auf dem Bildschirm präsentierten Person einzuschätzen.

        Genauer geht es darum, einzuschätzen, welchen Punkt der vor Ihnen platzierten Leiste die Person in dem Foto anschaut. Wenn Sie sich entschieden haben, geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox auf dem Bildschirm ein.


        Weiter durch Drücken der LEERTASTE
    KeyboardComponent kb_inst_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 5
      startVal [time (s)] = $d_inst_start
      store = nothing
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # duration of instruction (start)
        d_inst_start = 1

        # duration of instruction (training)
        d_inst_train = 1

        # duration of instruction (exp)
        d_inst_exp = 1
  Routine instructions_exp
    TextComponent instr_ex
      durationEstim = 5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $d_inst_exp
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      text:
        Trainingsdurchgänge abgeschlossen.
        Bei Fragen wenden Sie sich bitte an den:die Versuchsleiter:in im Nebenraum.


        Experiment durch Drücken der LEERTASTE beginnen.
    TextComponent instr_ex_cont
      letterHeight = 0.05
      startEstim = 5
      startVal [time (s)] = $d_inst_exp
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      text:
        Trainingsdurchgänge abgeschlossen.
        Bei Fragen wenden Sie sich bitte an den:die Versuchsleiter:in im Nebenraum.


        Experiment durch Drücken der LEERTASTE beginnen.
    KeyboardComponent kb_inst_exp
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 5
      startVal [time (s)] = $d_inst_exp
      store = nothing
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  Routine experiment
    ImageComponent img_exp
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent judgement_exp
      bold = False
      borderColor = -0.3020, -0.3020, -0.3020
      borderWidth = 1
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      pos = (0, -0.9)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_exp
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        judgement_exp.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys()
        if len(keys):
            if 'backspace' in keys:
                judgement_exp.text = judgement_exp.text[:-1]
            elif 'return' in keys:
                continueRoutine = False
            else:
                judgement_exp.text = judgement_exp.text + keys[0]
      End Routine:
        thisExp.addData("answer", judgement_exp.text)
  Routine end_screen
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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      text:
        Vielen Dank für Ihre Teilnahme.

        Bitte melden Sie sich bei dem:der Versuchsleiter:in.
Flow
  Routine instructions_start
  Routine instructions_training
  LoopInitiator trials_training loopType="TrialHandler"
    conditionsFile = cond_training.xlsx
    loopType = fullRandom
    nReps = 2
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    conditions:
      [{'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_00.JPG', 'img_rel_path': 'img_train\\F02_00.JPG', 'looker': 'F02', 'visAng': 0.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_01.JPG', 'img_rel_path': 'img_train\\F02_01.JPG', 'looker': 'F02', 'visAng': 1.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_02.JPG', 'img_rel_path': 'img_train\\F02_02.JPG', 'looker': 'F02', 'visAng': 2.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_03.JPG', 'img_rel_path': 'img_train\\F02_03.JPG', 'looker': 'F02', 'visAng': 3.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_04.JPG', 'img_rel_path': 'img_train\\F02_04.JPG', 'looker': 'F02', 'visAng': 4.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_05.JPG', 'img_rel_path': 'img_train\\F02_05.JPG', 'looker': 'F02', 'visAng': 5.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_06.JPG', 'img_rel_path': 'img_train\\F02_06.JPG', 'looker': 'F02', 'visAng': 6.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_07.JPG', 'img_rel_path': 'img_train\\F02_07.JPG', 'looker': 'F02', 'visAng': 7.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_08.JPG', 'img_rel_path': 'img_train\\F02_08.JPG', 'looker': 'F02', 'visAng': 8.0}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
    Routine training
  LoopTerminator trials_training
  Routine instructions_exp
  LoopInitiator trials_exp loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine experiment
  LoopTerminator trials_exp
  Routine end_screen
