PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'gender': '["m", "w", "d"]', 'age': 'f"{randint(18, 35):02.0f}"'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Window size (pixels) = [1280, 1024]
  expName = GazeEst_Wip
  keyboardBackend = ioHub
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Routines
  Routine instructions_training
    TextComponent inst_train
      durationEstim = 5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $d_inst_train
      wrapWidth = 1.75
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      text:
        Trainingsblock

        In den folgenden 10 Durchgängen haben Sie die Möglichkeit, sich mit dem Ablauf des Experimentes vertraut zu machen.

        Die Aufgabe:
        Bitte schätzen Sie unter Zuhilfenahme der vor Ihnen platzierten Leiste und Skala den Punkt auf der Leiste/Skala ein, der von der auf dem Bildschirm präsentierten Person angeschaut wird.
        Geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox ein.

        Im Anschluss an das Training haben Sie die Möglichkeit, mögliche Fragen mit dem:der Versuchsleiter:in zu klären.
    TextComponent inst_train_continue
      letterHeight = 0.05
      startEstim = 5
      startVal [time (s)] = $d_inst_train
      wrapWidth = 1.75
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      text:
        Trainingsblock

        In den folgenden 10 Durchgängen haben Sie die Möglichkeit, sich mit dem Ablauf des Experimentes vertraut zu machen.

        Die Aufgabe:
        Bitte schätzen Sie unter Zuhilfenahme der vor Ihnen platzierten Leiste und Skala den Punkt auf der Leiste/Skala ein, der von der auf dem Bildschirm präsentierten Person angeschaut wird.
        Geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox ein.

        Im Anschluss an das Training haben Sie die Möglichkeit, mögliche Fragen mit dem:der Versuchsleiter:in zu klären.

        Weiter durch Drücken der LEERTASTE
    KeyboardComponent key_inst_train
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 5
      startVal [time (s)] = $d_inst_train
      store = nothing
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  Routine training
    ImageComponent img_training
      image [set every repeat] = $img_rel_path
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent judgement
      bold = False
      borderColor = -0.3020, -0.3020, -0.3020
      borderWidth = 1
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      opacity = 0.5
      pos = (0, -0.9)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_training
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        judgement.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys(['0', '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'return', 'backspace'])

        if len(keys):
            if 'backspace' in keys:
                judgement.text = judgement.text[:-1]
            elif 'return' in keys and judgement.text != '':
                continueRoutine = False
            elif 'return' in keys and judgement.text == '':
                pass
            else:
                judgement.text = judgement.text + keys[0]
      End Routine:
        thisExp.addData("answer", judgement.text)
  Routine instructions_experiment_2
  Routine instructions_start
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # duration of instruction (start)
        d_inst_start = 1

        # duration of instruction (training)
        d_inst_train = 1

        # duration of instruction (exp)
        d_inst_exp = 1
    TextComponent inst_exp
      durationEstim = 5
      letterHeight = 0.05
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $d_inst_start
      wrapWidth = 1.75
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      text:
        Herzlich Willkommen.

        In dieser Studie untersuchen wir, wie wir die Blicke anderer Personen wahrnehmen.

        Dazu werden Ihnen im Folgenden die Fotos verschiedener Personen gezeigt. Ihre Aufgabe besteht darin, die Blickrichtung der gerade auf dem Bildschirm präsentierten Person einzuschätzen.

        Genauer geht es darum, einzuschätzen, welchen Punkt der vor Ihnen platzierten Leiste die Person in dem Foto anschaut. Wenn Sie sich entschieden haben, geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox auf dem Bildschirm ein.
    TextComponent inst_exp_continue
      letterHeight = 0.05
      startEstim = 5
      startVal [time (s)] = $d_inst_start
      wrapWidth = 1.75
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      text:
        Herzlich Willkommen.

        In dieser Studie untersuchen wir, wie wir die Blicke anderer Personen wahrnehmen.

        Dazu werden Ihnen im Folgenden die Fotos verschiedener Personen gezeigt. Ihre Aufgabe besteht darin, die Blickrichtung der gerade auf dem Bildschirm präsentierten Person einzuschätzen.

        Genauer geht es darum, einzuschätzen, welchen Punkt der vor Ihnen platzierten Leiste die Person in dem Foto anschaut. Wenn Sie sich entschieden haben, geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox auf dem Bildschirm ein.


        Weiter durch Drücken der LEERTASTE
    KeyboardComponent kb_inst_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 5
      startVal [time (s)] = $d_inst_start
      store = nothing
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    ResourceManagerComponent resources
      actionType = Start and Check
      checkAll = True
      forceEndRoutine = False
      resources = ['img_exp/F01_00.jpg', 'img_exp/F01_01.jpg', 'img_exp/F01_02.jpg', 'img_exp/F01_03.jpg', 'img_exp/F01_04.jpg', 'img_exp/F01_05.jpg', 'img_exp/F01_06.jpg', 'img_exp/F01_07.jpg', 'img_exp/F01_08.jpg', 'img_exp/F01_09.jpg', 'img_exp/F01_10.jpg', 'img_exp/F01_11.jpg', 'img_exp/F01_12.jpg', 'img_exp/F02_00.jpg', 'img_exp/F02_01.jpg', 'img_exp/F02_02.jpg', 'img_exp/F02_03.jpg', 'img_exp/F02_04.jpg', 'img_exp/F02_05.jpg', 'img_exp/F02_06.jpg', 'img_exp/F02_07.jpg', 'img_exp/F02_08.jpg', 'img_exp/F02_09.jpg', 'img_exp/F02_10.jpg', 'img_exp/F02_11.jpg', 'img_exp/F02_12.jpg', 'img_exp/F03_00.jpg', 'img_exp/F03_01.jpg', 'img_exp/F03_02.jpg', 'img_exp/F03_03.jpg', 'img_exp/F03_04.jpg', 'img_exp/F03_05.jpg', 'img_exp/F03_06.jpg', 'img_exp/F03_07.jpg', 'img_exp/F03_08.jpg', 'img_exp/F03_09.jpg', 'img_exp/F03_10.jpg', 'img_exp/F03_11.jpg', 'img_exp/F03_12.jpg', 'img_exp/F04_00.jpg', 'img_exp/F04_01.jpg', 'img_exp/F04_02.jpg', 'img_exp/F04_03.jpg', 'img_exp/F04_04.jpg', 'img_exp/F04_05.jpg', 'img_exp/F04_06.jpg', 'img_exp/F04_07.jpg', 'img_exp/F04_08.jpg', 'img_exp/F04_09.jpg', 'img_exp/F04_10.jpg', 'img_exp/F04_11.jpg', 'img_exp/F04_12.jpg', 'img_exp/F05_00.jpg', 'img_exp/F05_01.jpg', 'img_exp/F05_02.jpg', 'img_exp/F05_03.jpg', 'img_exp/F05_04.jpg', 'img_exp/F05_05.jpg', 'img_exp/F05_06.jpg', 'img_exp/F05_07.jpg', 'img_exp/F05_08.jpg', 'img_exp/F05_09.jpg', 'img_exp/F05_10.jpg', 'img_exp/F05_11.jpg', 'img_exp/F05_12.jpg', 'img_exp/F07_00.jpg', 'img_exp/F07_01.jpg', 'img_exp/F07_02.jpg', 'img_exp/F07_03.jpg', 'img_exp/F07_04.jpg', 'img_exp/F07_05.jpg', 'img_exp/F07_06.jpg', 'img_exp/F07_07.jpg', 'img_exp/F07_08.jpg', 'img_exp/F07_09.jpg', 'img_exp/F07_10.jpg', 'img_exp/F07_11.jpg', 'img_exp/F07_12.jpg', 'img_exp/F08_00.jpg', 'img_exp/F08_01.jpg', 'img_exp/F08_02.jpg', 'img_exp/F08_03.jpg', 'img_exp/F08_04.jpg', 'img_exp/F08_05.jpg', 'img_exp/F08_06.jpg', 'img_exp/F08_07.jpg', 'img_exp/F08_08.jpg', 'img_exp/F08_09.jpg', 'img_exp/F08_10.jpg', 'img_exp/F08_11.jpg', 'img_exp/F08_12.jpg', 'img_exp/F09_00.jpg', 'img_exp/F09_01.jpg', 'img_exp/F09_02.jpg', 'img_exp/F09_03.jpg', 'img_exp/F09_04.jpg', 'img_exp/F09_05.jpg', 'img_exp/F09_06.jpg', 'img_exp/F09_07.jpg', 'img_exp/F09_08.jpg', 'img_exp/F09_09.jpg', 'img_exp/F09_10.jpg', 'img_exp/F09_11.jpg', 'img_exp/F09_12.jpg', 'img_exp/F10_00.jpg', 'img_exp/F10_01.jpg', 'img_exp/F10_02.jpg', 'img_exp/F10_03.jpg', 'img_exp/F10_04.jpg', 'img_exp/F10_05.jpg', 'img_exp/F10_06.jpg', 'img_exp/F10_07.jpg', 'img_exp/F10_08.jpg', 'img_exp/F10_09.jpg', 'img_exp/F10_10.jpg', 'img_exp/F10_11.jpg', 'img_exp/F10_12.jpg', 'img_exp/F11_00.jpg', 'img_exp/F11_01.jpg', 'img_exp/F11_02.jpg', 'img_exp/F11_03.jpg', 'img_exp/F11_04.jpg', 'img_exp/F11_05.jpg', 'img_exp/F11_06.jpg', 'img_exp/F11_07.jpg', 'img_exp/F11_08.jpg', 'img_exp/F11_09.jpg', 'img_exp/F11_10.jpg', 'img_exp/F11_11.jpg', 'img_exp/F11_12.jpg', 'img_exp/F12_00.jpg', 'img_exp/F12_01.jpg', 'img_exp/F12_02.jpg', 'img_exp/F12_03.jpg', 'img_exp/F12_04.jpg', 'img_exp/F12_05.jpg', 'img_exp/F12_06.jpg', 'img_exp/F12_07.jpg', 'img_exp/F12_08.jpg', 'img_exp/F12_09.jpg', 'img_exp/F12_10.jpg', 'img_exp/F12_11.jpg', 'img_exp/F12_12.jpg', 'img_exp/F13_00.jpg', 'img_exp/F13_01.jpg', 'img_exp/F13_02.jpg', 'img_exp/F13_03.jpg', 'img_exp/F13_04.jpg', 'img_exp/F13_05.jpg', 'img_exp/F13_06.jpg', 'img_exp/F13_07.jpg', 'img_exp/F13_08.jpg', 'img_exp/F13_09.jpg', 'img_exp/F13_10.jpg', 'img_exp/F13_11.jpg', 'img_exp/F13_12.jpg', 'img_exp/F14_00.jpg', 'img_exp/F14_01.jpg', 'img_exp/F14_02.jpg', 'img_exp/F14_03.jpg', 'img_exp/F14_04.jpg', 'img_exp/F14_05.jpg', 'img_exp/F14_06.jpg', 'img_exp/F14_07.jpg', 'img_exp/F14_08.jpg', 'img_exp/F14_09.jpg', 'img_exp/F14_10.jpg', 'img_exp/F14_11.jpg', 'img_exp/F14_12.jpg', 'img_exp/F15_00.jpg', 'img_exp/F15_01.jpg', 'img_exp/F15_02.jpg', 'img_exp/F15_03.jpg', 'img_exp/F15_04.jpg', 'img_exp/F15_05.jpg', 'img_exp/F15_06.jpg', 'img_exp/F15_07.jpg', 'img_exp/F15_08.jpg', 'img_exp/F15_09.jpg', 'img_exp/F15_10.jpg', 'img_exp/F15_11.jpg', 'img_exp/F15_12.jpg', 'img_exp/F16_00.jpg', 'img_exp/F16_01.jpg', 'img_exp/F16_02.jpg', 'img_exp/F16_03.jpg', 'img_exp/F16_04.jpg', 'img_exp/F16_05.jpg', 'img_exp/F16_06.jpg', 'img_exp/F16_07.jpg', 'img_exp/F16_08.jpg', 'img_exp/F16_09.jpg', 'img_exp/F16_10.jpg', 'img_exp/F16_11.jpg', 'img_exp/F16_12.jpg', 'img_exp/F17_00.jpg', 'img_exp/F17_01.jpg', 'img_exp/F17_02.jpg', 'img_exp/F17_03.jpg', 'img_exp/F17_04.jpg', 'img_exp/F17_05.jpg', 'img_exp/F17_06.jpg', 'img_exp/F17_07.jpg', 'img_exp/F17_08.jpg', 'img_exp/F17_09.jpg', 'img_exp/F17_10.jpg', 'img_exp/F17_11.jpg', 'img_exp/F17_12.jpg', 'img_exp/F18_00.jpg', 'img_exp/F18_01.jpg', 'img_exp/F18_02.jpg', 'img_exp/F18_03.jpg', 'img_exp/F18_04.jpg', 'img_exp/F18_05.jpg', 'img_exp/F18_06.jpg', 'img_exp/F18_07.jpg', 'img_exp/F18_08.jpg', 'img_exp/F18_09.jpg', 'img_exp/F18_10.jpg', 'img_exp/F18_11.jpg', 'img_exp/F18_12.jpg', 'img_exp/F19_00.jpg', 'img_exp/F19_01.jpg', 'img_exp/F19_02.jpg', 'img_exp/F19_03.jpg', 'img_exp/F19_04.jpg', 'img_exp/F19_05.jpg', 'img_exp/F19_06.jpg', 'img_exp/F19_07.jpg', 'img_exp/F19_08.jpg', 'img_exp/F19_09.jpg', 'img_exp/F19_10.jpg', 'img_exp/F19_11.jpg', 'img_exp/F19_12.jpg', 'img_exp/F20_00.jpg', 'img_exp/F20_01.jpg', 'img_exp/F20_02.jpg', 'img_exp/F20_03.jpg', 'img_exp/F20_04.jpg', 'img_exp/F20_05.jpg', 'img_exp/F20_06.jpg', 'img_exp/F20_07.jpg', 'img_exp/F20_08.jpg', 'img_exp/F20_09.jpg', 'img_exp/F20_10.jpg', 'img_exp/F20_11.jpg', 'img_exp/F20_12.jpg', 'img_exp/F21_00.jpg', 'img_exp/F21_01.jpg', 'img_exp/F21_02.jpg', 'img_exp/F21_03.jpg', 'img_exp/F21_04.jpg', 'img_exp/F21_05.jpg', 'img_exp/F21_06.jpg', 'img_exp/F21_07.jpg', 'img_exp/F21_08.jpg', 'img_exp/F21_09.jpg', 'img_exp/F21_10.jpg', 'img_exp/F21_11.jpg', 'img_exp/F21_12.jpg', 'img_exp/F22_00.jpg', 'img_exp/F22_01.jpg', 'img_exp/F22_02.jpg', 'img_exp/F22_03.jpg', 'img_exp/F22_04.jpg', 'img_exp/F22_05.jpg', 'img_exp/F22_06.jpg', 'img_exp/F22_07.jpg', 'img_exp/F22_08.jpg', 'img_exp/F22_09.jpg', 'img_exp/F22_10.jpg', 'img_exp/F22_11.jpg', 'img_exp/F22_12.jpg', 'img_exp/F23_00.jpg', 'img_exp/F23_01.jpg', 'img_exp/F23_02.jpg', 'img_exp/F23_03.jpg', 'img_exp/F23_04.jpg', 'img_exp/F23_05.jpg', 'img_exp/F23_06.jpg', 'img_exp/F23_07.jpg', 'img_exp/F23_08.jpg', 'img_exp/F23_09.jpg', 'img_exp/F23_10.jpg', 'img_exp/F23_11.jpg', 'img_exp/F23_12.jpg', 'img_exp/F24_00.jpg', 'img_exp/F24_01.jpg', 'img_exp/F24_02.jpg', 'img_exp/F24_03.jpg', 'img_exp/F24_04.jpg', 'img_exp/F24_05.jpg', 'img_exp/F24_06.jpg', 'img_exp/F24_07.jpg', 'img_exp/F24_08.jpg', 'img_exp/F24_09.jpg', 'img_exp/F24_10.jpg', 'img_exp/F24_11.jpg', 'img_exp/F24_12.jpg', 'img_exp/F25_00.jpg', 'img_exp/F25_01.jpg', 'img_exp/F25_02.jpg', 'img_exp/F25_03.jpg', 'img_exp/F25_04.jpg', 'img_exp/F25_05.jpg', 'img_exp/F25_06.jpg', 'img_exp/F25_07.jpg', 'img_exp/F25_08.jpg', 'img_exp/F25_09.jpg', 'img_exp/F25_10.jpg', 'img_exp/F25_11.jpg', 'img_exp/F25_12.jpg', 'img_exp/F26_00.jpg', 'img_exp/F26_01.jpg', 'img_exp/F26_02.jpg', 'img_exp/F26_03.jpg', 'img_exp/F26_04.jpg', 'img_exp/F26_05.jpg', 'img_exp/F26_06.jpg', 'img_exp/F26_07.jpg', 'img_exp/F26_08.jpg', 'img_exp/F26_09.jpg', 'img_exp/F26_10.jpg', 'img_exp/F26_11.jpg', 'img_exp/F26_12.jpg', 'img_exp/F28_00.jpg', 'img_exp/F28_01.jpg', 'img_exp/F28_02.jpg', 'img_exp/F28_03.jpg', 'img_exp/F28_04.jpg', 'img_exp/F28_05.jpg', 'img_exp/F28_06.jpg', 'img_exp/F28_07.jpg', 'img_exp/F28_08.jpg', 'img_exp/F28_09.jpg', 'img_exp/F28_10.jpg', 'img_exp/F28_11.jpg', 'img_exp/F28_12.jpg', 'img_exp/M01_00.jpg', 'img_exp/M01_01.jpg', 'img_exp/M01_02.jpg', 'img_exp/M01_03.jpg', 'img_exp/M01_04.jpg', 'img_exp/M01_05.jpg', 'img_exp/M01_06.jpg', 'img_exp/M01_07.jpg', 'img_exp/M01_08.jpg', 'img_exp/M01_09.jpg', 'img_exp/M01_10.jpg', 'img_exp/M01_11.jpg', 'img_exp/M01_12.jpg', 'img_exp/M02_00.jpg', 'img_exp/M02_01.jpg', 'img_exp/M02_02.jpg', 'img_exp/M02_03.jpg', 'img_exp/M02_04.jpg', 'img_exp/M02_05.jpg', 'img_exp/M02_06.jpg', 'img_exp/M02_07.jpg', 'img_exp/M02_08.jpg', 'img_exp/M02_09.jpg', 'img_exp/M02_10.jpg', 'img_exp/M02_11.jpg', 'img_exp/M02_12.jpg', 'img_exp/M03_00.jpg', 'img_exp/M03_01.jpg', 'img_exp/M03_02.jpg', 'img_exp/M03_03.jpg', 'img_exp/M03_04.jpg', 'img_exp/M03_05.jpg', 'img_exp/M03_06.jpg', 'img_exp/M03_07.jpg', 'img_exp/M03_08.jpg', 'img_exp/M03_09.jpg', 'img_exp/M03_10.jpg', 'img_exp/M03_11.jpg', 'img_exp/M03_12.jpg', 'img_exp/M04_00.jpg', 'img_exp/M04_01.jpg', 'img_exp/M04_02.jpg', 'img_exp/M04_03.jpg', 'img_exp/M04_04.jpg', 'img_exp/M04_05.jpg', 'img_exp/M04_06.jpg', 'img_exp/M04_07.jpg', 'img_exp/M04_08.jpg', 'img_exp/M04_09.jpg', 'img_exp/M04_10.jpg', 'img_exp/M04_11.jpg', 'img_exp/M04_12.jpg', 'img_exp/M05_00.jpg', 'img_exp/M05_01.jpg', 'img_exp/M05_02.jpg', 'img_exp/M05_03.jpg', 'img_exp/M05_04.jpg', 'img_exp/M05_05.jpg', 'img_exp/M05_06.jpg', 'img_exp/M05_07.jpg', 'img_exp/M05_08.jpg', 'img_exp/M05_09.jpg', 'img_exp/M05_10.jpg', 'img_exp/M05_11.jpg', 'img_exp/M05_12.jpg', 'img_exp/M06_00.jpg', 'img_exp/M06_01.jpg', 'img_exp/M06_02.jpg', 'img_exp/M06_03.jpg', 'img_exp/M06_04.jpg', 'img_exp/M06_05.jpg', 'img_exp/M06_06.jpg', 'img_exp/M06_07.jpg', 'img_exp/M06_08.jpg', 'img_exp/M06_09.jpg', 'img_exp/M06_10.jpg', 'img_exp/M06_11.jpg', 'img_exp/M06_12.jpg', 'img_exp/M07_00.jpg', 'img_exp/M07_01.jpg', 'img_exp/M07_02.jpg', 'img_exp/M07_03.jpg', 'img_exp/M07_04.jpg', 'img_exp/M07_05.jpg', 'img_exp/M07_06.jpg', 'img_exp/M07_07.jpg', 'img_exp/M07_08.jpg', 'img_exp/M07_09.jpg', 'img_exp/M07_10.jpg', 'img_exp/M07_11.jpg', 'img_exp/M07_12.jpg', 'img_exp/M08_00.jpg', 'img_exp/M08_01.jpg', 'img_exp/M08_02.jpg', 'img_exp/M08_03.jpg', 'img_exp/M08_04.jpg', 'img_exp/M08_05.jpg', 'img_exp/M08_06.jpg', 'img_exp/M08_07.jpg', 'img_exp/M08_08.jpg', 'img_exp/M08_09.jpg', 'img_exp/M08_10.jpg', 'img_exp/M08_11.jpg', 'img_exp/M08_12.jpg', 'img_exp/M09_00.jpg', 'img_exp/M09_01.jpg', 'img_exp/M09_02.jpg', 'img_exp/M09_03.jpg', 'img_exp/M09_04.jpg', 'img_exp/M09_05.jpg', 'img_exp/M09_06.jpg', 'img_exp/M09_07.jpg', 'img_exp/M09_08.jpg', 'img_exp/M09_09.jpg', 'img_exp/M09_10.jpg', 'img_exp/M09_11.jpg', 'img_exp/M09_12.jpg', 'img_exp/M10_00.jpg', 'img_exp/M10_01.jpg', 'img_exp/M10_02.jpg', 'img_exp/M10_03.jpg', 'img_exp/M10_04.jpg', 'img_exp/M10_05.jpg', 'img_exp/M10_06.jpg', 'img_exp/M10_07.jpg', 'img_exp/M10_08.jpg', 'img_exp/M10_09.jpg', 'img_exp/M10_10.jpg', 'img_exp/M10_11.jpg', 'img_exp/M10_12.jpg', 'img_exp/M11_00.jpg', 'img_exp/M11_01.jpg', 'img_exp/M11_02.jpg', 'img_exp/M11_03.jpg', 'img_exp/M11_04.jpg', 'img_exp/M11_05.jpg', 'img_exp/M11_06.jpg', 'img_exp/M11_07.jpg', 'img_exp/M11_08.jpg', 'img_exp/M11_09.jpg', 'img_exp/M11_10.jpg', 'img_exp/M11_11.jpg', 'img_exp/M11_12.jpg', 'img_exp/M12_00.jpg', 'img_exp/M12_01.jpg', 'img_exp/M12_02.jpg', 'img_exp/M12_03.jpg', 'img_exp/M12_04.jpg', 'img_exp/M12_05.jpg', 'img_exp/M12_06.jpg', 'img_exp/M12_07.jpg', 'img_exp/M12_08.jpg', 'img_exp/M12_09.jpg', 'img_exp/M12_10.jpg', 'img_exp/M12_11.jpg', 'img_exp/M12_12.jpg', 'img_exp/M13_00.jpg', 'img_exp/M13_01.jpg', 'img_exp/M13_02.jpg', 'img_exp/M13_03.jpg', 'img_exp/M13_04.jpg', 'img_exp/M13_05.jpg', 'img_exp/M13_06.jpg', 'img_exp/M13_07.jpg', 'img_exp/M13_08.jpg', 'img_exp/M13_09.jpg', 'img_exp/M13_10.jpg', 'img_exp/M13_11.jpg', 'img_exp/M13_12.jpg', 'img_exp/M14_00.jpg', 'img_exp/M14_01.jpg', 'img_exp/M14_02.jpg', 'img_exp/M14_03.jpg', 'img_exp/M14_04.jpg', 'img_exp/M14_05.jpg', 'img_exp/M14_06.jpg', 'img_exp/M14_07.jpg', 'img_exp/M14_08.jpg', 'img_exp/M14_09.jpg', 'img_exp/M14_10.jpg', 'img_exp/M14_11.jpg', 'img_exp/M14_12.jpg', 'img_train/M02_00.jpg', 'img_train/M02_02.jpg', 'img_train/M02_04.jpg', 'img_train/M02_06.jpg', 'img_train/M02_12.jpg']
      startVal [time (s)] = 0
  Routine instructions_exp
    TextComponent instr_ex
      durationEstim = 5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $d_inst_exp
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      text:
        Trainingsdurchgänge abgeschlossen.
        Bei Fragen wenden Sie sich bitte an den:die Versuchsleiter:in im Nebenraum.


        Experiment durch Drücken der LEERTASTE beginnen.
    TextComponent instr_ex_cont
      letterHeight = 0.05
      startEstim = 5
      startVal [time (s)] = $d_inst_exp
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      text:
        Trainingsdurchgänge abgeschlossen.
        Bei Fragen wenden Sie sich bitte an den:die Versuchsleiter:in im Nebenraum.


        Experiment durch Drücken der LEERTASTE beginnen.
    KeyboardComponent kb_inst_exp
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 5
      startVal [time (s)] = $d_inst_exp
      store = nothing
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  Routine experiment
    ImageComponent img_exp
      image [set every repeat] = $img_rel_path
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent judgement_exp
      bold = False
      borderColor = -0.3020, -0.3020, -0.3020
      borderWidth = 1
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      opacity = 0.5
      pos = (0, -0.9)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_exp
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        judgement_exp.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys(['0', '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'return', 'backspace'])

        if len(keys):
            if 'backspace' in keys:
                judgement.text = judgement.text[:-1]
            elif 'return' in keys and judgement.text != '':
                continueRoutine = False
            elif 'return' in keys and judgement.text == '':
                pass
            else:
                judgement.text = judgement.text + keys[0]
      End Routine:
        thisExp.addData("answer", judgement_exp.text)
  Routine end_screen
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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      text:
        Vielen Dank für Ihre Teilnahme.

        Bitte melden Sie sich bei dem:der Versuchsleiter:in.
  Routine ITI_Training
    TextComponent text_iti_train
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine ITI_Exp
    TextComponent text_iti_exp
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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Flow
  Routine instructions_start
  Routine instructions_training
  LoopInitiator trials_training loopType="TrialHandler"
    conditionsFile = cond_training.xlsx
    loopType = fullRandom
    nReps = 2
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    conditions:
      [{'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_00.JPG', 'img_rel_path': 'img_train\\F02_00.JPG', 'looker': 'F02', 'visAng': 0.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_01.JPG', 'img_rel_path': 'img_train\\F02_01.JPG', 'looker': 'F02', 'visAng': 1.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_02.JPG', 'img_rel_path': 'img_train\\F02_02.JPG', 'looker': 'F02', 'visAng': 2.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_03.JPG', 'img_rel_path': 'img_train\\F02_03.JPG', 'looker': 'F02', 'visAng': 3.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_04.JPG', 'img_rel_path': 'img_train\\F02_04.JPG', 'looker': 'F02', 'visAng': 4.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_05.JPG', 'img_rel_path': 'img_train\\F02_05.JPG', 'looker': 'F02', 'visAng': 5.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_06.JPG', 'img_rel_path': 'img_train\\F02_06.JPG', 'looker': 'F02', 'visAng': 6.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_07.JPG', 'img_rel_path': 'img_train\\F02_07.JPG', 'looker': 'F02', 'visAng': 7.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_08.JPG', 'img_rel_path': 'img_train\\F02_08.JPG', 'looker': 'F02', 'visAng': 8.0}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
    Routine ITI_Training
    Routine training
  LoopTerminator trials_training
  Routine instructions_exp
  LoopInitiator trials_exp loopType="TrialHandler"
    conditionsFile = cond_exp.xlsx
    loopType = random
    nReps = 6
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    conditions:
      [{'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F01_00.jpg', 'img_rel_path': 'img_exp\\F01_00.jpg', 'looker': 'F01', 'visAng': 0, 'visAngCorr': 0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F01_02.jpg', 'img_rel_path': 'img_exp\\F01_02.jpg', 'looker': 'F01', 'visAng': 2, 'visAngCorr': 2.2},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F01_04.jpg', 'img_rel_path': 'img_exp\\F01_04.jpg', 'looker': 'F01', 'visAng': 4, 'visAngCorr': 4.4},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F01_06.jpg', 'img_rel_path': 'img_exp\\F01_06.jpg', 'looker': 'F01', 'visAng': 6, 'visAngCorr': 6.6},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F01_08.jpg', 'img_rel_path': 'img_exp\\F01_08.jpg', 'looker': 'F01', 'visAng': 8, 'visAngCorr': 8.8},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F01_12.jpg', 'img_rel_path': 'img_exp\\F01_12.jpg', 'looker': 'F01', 'visAng': 12, 'visAngCorr': 13.3},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F02_00.jpg', 'img_rel_path': 'img_exp\\F02_00.jpg', 'looker': 'F02', 'visAng': 0, 'visAngCorr': 0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F02_02.jpg', 'img_rel_path': 'img_exp\\F02_02.jpg', 'looker': 'F02', 'visAng': 2, 'visAngCorr': 2.2}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
    Routine ITI_Exp
    Routine experiment
  LoopTerminator trials_exp
  Routine end_screen
