PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'subject_gender': '["m", "w", "d"]', 'subject_age': 'f"{randint(18, 35):02.0f}"'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = norm
  Use version = 2021.2.3
  Window size (pixels) = [1280, 1024]
  expName = Gaze_Estimation_linux
  keyboardBackend = Pyglet
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Routines
  Routine instructions_training
    TextComponent inst_train
      durationEstim = 5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $d_inst_train
      wrapWidth = 1.75
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      text:
        Trainingsblock

        In den folgenden 10 Durchgängen haben Sie die Möglichkeit, sich mit dem Ablauf des Experimentes vertraut zu machen.

        Die Aufgabe:
        Bitte schätzen Sie unter Zuhilfenahme der vor Ihnen platzierten Leiste und Skala den Punkt auf der Leiste/Skala ein, der von der auf dem Bildschirm präsentierten Person angeschaut wird.
        Geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox ein.

        Im Anschluss an das Training haben Sie die Möglichkeit, mögliche Fragen mit dem:der Versuchsleiter:in zu klären.
    TextComponent inst_train_continue
      letterHeight = 0.05
      startEstim = 5
      startVal [time (s)] = $d_inst_train
      wrapWidth = 1.75
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      text:
        Trainingsblock

        In den folgenden 10 Durchgängen haben Sie die Möglichkeit, sich mit dem Ablauf des Experimentes vertraut zu machen.

        Die Aufgabe:
        Bitte schätzen Sie unter Zuhilfenahme der vor Ihnen platzierten Leiste und Skala den Punkt auf der Leiste/Skala ein, der von der auf dem Bildschirm präsentierten Person angeschaut wird.
        Geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox ein.

        Im Anschluss an das Training haben Sie die Möglichkeit, mögliche Fragen mit dem:der Versuchsleiter:in zu klären.

        Weiter durch Drücken der LEERTASTE
    KeyboardComponent key_inst_train
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 5
      startVal [time (s)] = $d_inst_train
      store = nothing
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  Routine training
    ImageComponent img_training
      image [set during: ITI_Training.ISI_training] = $img_rel_path
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent judgement
      bold = False
      borderColor = -0.3020, -0.3020, -0.3020
      borderWidth = 1
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      opacity = 0.5
      pos = (0, -0.9)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_training
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        judgement.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys(['0', '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'return', 'backspace'])

        if len(keys):
            if 'backspace' in keys:
                judgement.text = judgement.text[:-1]
            elif 'return' in keys and judgement.text != '':
                continueRoutine = False
            elif 'return' in keys and judgement.text == '':
                pass
            else:
                judgement.text = judgement.text + keys[0]
      End Routine:
        thisExp.addData("answer", judgement.text)
        thisExp.addData("RT", t)
        thisExp.addData("looker_gender", looker[0])
  Routine instructions_experiment_2
  Routine instructions_start
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        # duration of instruction (start)
        d_inst_start = 1

        # duration of instruction (training)
        d_inst_train = 1

        # duration of instruction (exp)
        d_inst_exp = 1

        # duration of iti (ext and training)
        d_iti = 0.5
    TextComponent inst_exp
      durationEstim = 5
      letterHeight = 0.05
      startEstim = 0
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $d_inst_start
      wrapWidth = 1.75
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      text:
        Herzlich Willkommen.

        In dieser Studie untersuchen wir, wie wir die Blicke anderer Personen wahrnehmen.

        Dazu werden Ihnen im Folgenden die Fotos verschiedener Personen gezeigt. Ihre Aufgabe besteht darin, die Blickrichtung der gerade auf dem Bildschirm präsentierten Person einzuschätzen.

        Genauer geht es darum, einzuschätzen, welchen Punkt der vor Ihnen platzierten Leiste die Person in dem Foto anschaut. Wenn Sie sich entschieden haben, geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox auf dem Bildschirm ein.
    TextComponent inst_exp_continue
      letterHeight = 0.05
      startEstim = 5
      startVal [time (s)] = $d_inst_start
      wrapWidth = 1.75
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      text:
        Herzlich Willkommen.

        In dieser Studie untersuchen wir, wie wir die Blicke anderer Personen wahrnehmen.

        Dazu werden Ihnen im Folgenden die Fotos verschiedener Personen gezeigt. Ihre Aufgabe besteht darin, die Blickrichtung der gerade auf dem Bildschirm präsentierten Person einzuschätzen.

        Genauer geht es darum, einzuschätzen, welchen Punkt der vor Ihnen platzierten Leiste die Person in dem Foto anschaut. Wenn Sie sich entschieden haben, geben Sie Ihr Urteil bitte in die dafür vorgesehene Textbox auf dem Bildschirm ein.


        Weiter durch Drücken der LEERTASTE
    KeyboardComponent kb_inst_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 5
      startVal [time (s)] = $d_inst_start
      store = nothing
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    ResourceManagerComponent resources
      actionType = Start and Check
      checkAll = True
      disabled = True
      forceEndRoutine = False
      resources = ['img_train/M02_00.jpg', 'img_train/M02_02.jpg', 'img_train/M02_04.jpg', 'img_train/M02_06.jpg', 'img_train/M02_12.jpg', 'img_exp/F01_00.jpg', 'img_exp/F01_02.jpg', 'img_exp/F01_04.jpg', 'img_exp/F01_06.jpg', 'img_exp/F01_08.jpg', 'img_exp/F01_12.jpg', 'img_exp/F02_00.jpg', 'img_exp/F02_02.jpg', 'img_exp/F02_04.jpg', 'img_exp/F02_06.jpg', 'img_exp/F02_08.jpg', 'img_exp/F02_12.jpg', 'img_exp/F03_00.jpg', 'img_exp/F03_02.jpg', 'img_exp/F03_04.jpg', 'img_exp/F03_06.jpg', 'img_exp/F03_08.jpg', 'img_exp/F03_12.jpg', 'img_exp/F04_00.jpg', 'img_exp/F04_02.jpg', 'img_exp/F04_04.jpg', 'img_exp/F04_06.jpg', 'img_exp/F04_08.jpg', 'img_exp/F04_12.jpg', 'img_exp/F05_00.jpg', 'img_exp/F05_02.jpg', 'img_exp/F05_04.jpg', 'img_exp/F05_06.jpg', 'img_exp/F05_08.jpg', 'img_exp/F05_12.jpg', 'img_exp/F07_00.jpg', 'img_exp/F07_02.jpg', 'img_exp/F07_04.jpg', 'img_exp/F07_06.jpg', 'img_exp/F07_08.jpg', 'img_exp/F07_12.jpg', 'img_exp/F08_00.jpg', 'img_exp/F08_02.jpg', 'img_exp/F08_04.jpg', 'img_exp/F08_06.jpg', 'img_exp/F08_08.jpg', 'img_exp/F08_12.jpg', 'img_exp/F09_00.jpg', 'img_exp/F09_02.jpg', 'img_exp/F09_04.jpg', 'img_exp/F09_06.jpg', 'img_exp/F09_08.jpg', 'img_exp/F09_12.jpg', 'img_exp/F10_00.jpg', 'img_exp/F10_02.jpg', 'img_exp/F10_04.jpg', 'img_exp/F10_06.jpg', 'img_exp/F10_08.jpg', 'img_exp/F10_12.jpg', 'img_exp/F11_00.jpg', 'img_exp/F11_02.jpg', 'img_exp/F11_04.jpg', 'img_exp/F11_06.jpg', 'img_exp/F11_08.jpg', 'img_exp/F11_12.jpg', 'img_exp/F12_00.jpg', 'img_exp/F12_02.jpg', 'img_exp/F12_04.jpg', 'img_exp/F12_06.jpg', 'img_exp/F12_08.jpg', 'img_exp/F12_12.jpg', 'img_exp/F13_00.jpg', 'img_exp/F13_02.jpg', 'img_exp/F13_04.jpg', 'img_exp/F13_06.jpg', 'img_exp/F13_08.jpg', 'img_exp/F13_12.jpg', 'img_exp/F14_00.jpg', 'img_exp/F14_02.jpg', 'img_exp/F14_04.jpg', 'img_exp/F14_06.jpg', 'img_exp/F14_08.jpg', 'img_exp/F14_12.jpg', 'img_exp/F15_00.jpg', 'img_exp/F15_02.jpg', 'img_exp/F15_04.jpg', 'img_exp/F15_06.jpg', 'img_exp/F15_08.jpg', 'img_exp/F15_12.jpg', 'img_exp/F16_00.jpg', 'img_exp/F16_02.jpg', 'img_exp/F16_04.jpg', 'img_exp/F16_06.jpg', 'img_exp/F16_08.jpg', 'img_exp/F16_12.jpg', 'img_exp/F17_00.jpg', 'img_exp/F17_02.jpg', 'img_exp/F17_04.jpg', 'img_exp/F17_06.jpg', 'img_exp/F17_08.jpg', 'img_exp/F17_12.jpg', 'img_exp/F18_00.jpg', 'img_exp/F18_02.jpg', 'img_exp/F18_04.jpg', 'img_exp/F18_06.jpg', 'img_exp/F18_08.jpg', 'img_exp/F18_12.jpg', 'img_exp/F19_00.jpg', 'img_exp/F19_02.jpg', 'img_exp/F19_04.jpg', 'img_exp/F19_06.jpg', 'img_exp/F19_08.jpg', 'img_exp/F19_12.jpg', 'img_exp/F20_00.jpg', 'img_exp/F20_02.jpg', 'img_exp/F20_04.jpg', 'img_exp/F20_06.jpg', 'img_exp/F20_08.jpg', 'img_exp/F20_12.jpg', 'img_exp/F21_00.jpg', 'img_exp/F21_02.jpg', 'img_exp/F21_04.jpg', 'img_exp/F21_06.jpg', 'img_exp/F21_08.jpg', 'img_exp/F21_12.jpg', 'img_exp/F22_00.jpg', 'img_exp/F22_02.jpg', 'img_exp/F22_04.jpg', 'img_exp/F22_06.jpg', 'img_exp/F22_08.jpg', 'img_exp/F22_12.jpg', 'img_exp/F23_00.jpg', 'img_exp/F23_02.jpg', 'img_exp/F23_04.jpg', 'img_exp/F23_06.jpg', 'img_exp/F23_08.jpg', 'img_exp/F23_12.jpg', 'img_exp/F24_00.jpg', 'img_exp/F24_02.jpg', 'img_exp/F24_04.jpg', 'img_exp/F24_06.jpg', 'img_exp/F24_08.jpg', 'img_exp/F24_12.jpg', 'img_exp/F25_00.jpg', 'img_exp/F25_02.jpg', 'img_exp/F25_04.jpg', 'img_exp/F25_06.jpg', 'img_exp/F25_08.jpg', 'img_exp/F25_12.jpg', 'img_exp/F26_00.jpg', 'img_exp/F26_02.jpg', 'img_exp/F26_04.jpg', 'img_exp/F26_06.jpg', 'img_exp/F26_08.jpg', 'img_exp/F26_12.jpg', 'img_exp/F28_00.jpg', 'img_exp/F28_02.jpg', 'img_exp/F28_04.jpg', 'img_exp/F28_06.jpg', 'img_exp/F28_08.jpg', 'img_exp/F28_12.jpg', 'img_exp/M01_00.jpg', 'img_exp/M01_02.jpg', 'img_exp/M01_04.jpg', 'img_exp/M01_06.jpg', 'img_exp/M01_08.jpg', 'img_exp/M01_12.jpg', 'img_exp/M02_00.jpg', 'img_exp/M02_02.jpg', 'img_exp/M02_04.jpg', 'img_exp/M02_06.jpg', 'img_exp/M02_08.jpg', 'img_exp/M02_12.jpg', 'img_exp/M03_00.jpg', 'img_exp/M03_02.jpg', 'img_exp/M03_04.jpg', 'img_exp/M03_06.jpg', 'img_exp/M03_08.jpg', 'img_exp/M03_12.jpg', 'img_exp/M04_00.jpg', 'img_exp/M04_02.jpg', 'img_exp/M04_04.jpg', 'img_exp/M04_06.jpg', 'img_exp/M04_08.jpg', 'img_exp/M04_12.jpg', 'img_exp/M05_00.jpg', 'img_exp/M05_02.jpg', 'img_exp/M05_04.jpg', 'img_exp/M05_06.jpg', 'img_exp/M05_08.jpg', 'img_exp/M05_12.jpg', 'img_exp/M06_00.jpg', 'img_exp/M06_02.jpg', 'img_exp/M06_04.jpg', 'img_exp/M06_06.jpg', 'img_exp/M06_08.jpg', 'img_exp/M06_12.jpg', 'img_exp/M07_00.jpg', 'img_exp/M07_02.jpg', 'img_exp/M07_04.jpg', 'img_exp/M07_06.jpg', 'img_exp/M07_08.jpg', 'img_exp/M07_12.jpg', 'img_exp/M08_00.jpg', 'img_exp/M08_02.jpg', 'img_exp/M08_04.jpg', 'img_exp/M08_06.jpg', 'img_exp/M08_08.jpg', 'img_exp/M08_12.jpg', 'img_exp/M09_00.jpg', 'img_exp/M09_02.jpg', 'img_exp/M09_04.jpg', 'img_exp/M09_06.jpg', 'img_exp/M09_08.jpg', 'img_exp/M09_12.jpg', 'img_exp/M10_00.jpg', 'img_exp/M10_02.jpg', 'img_exp/M10_04.jpg', 'img_exp/M10_06.jpg', 'img_exp/M10_08.jpg', 'img_exp/M10_12.jpg', 'img_exp/M11_00.jpg', 'img_exp/M11_02.jpg', 'img_exp/M11_04.jpg', 'img_exp/M11_06.jpg', 'img_exp/M11_08.jpg', 'img_exp/M11_12.jpg', 'img_exp/M12_00.jpg', 'img_exp/M12_02.jpg', 'img_exp/M12_04.jpg', 'img_exp/M12_06.jpg', 'img_exp/M12_08.jpg', 'img_exp/M12_12.jpg', 'img_exp/M13_00.jpg', 'img_exp/M13_02.jpg', 'img_exp/M13_04.jpg', 'img_exp/M13_06.jpg', 'img_exp/M13_08.jpg', 'img_exp/M13_12.jpg', 'img_exp/M14_00.jpg', 'img_exp/M14_02.jpg', 'img_exp/M14_04.jpg', 'img_exp/M14_06.jpg', 'img_exp/M14_08.jpg', 'img_exp/M14_12.jpg']
      startVal [time (s)] = 0
  Routine instructions_exp
    TextComponent instr_ex
      durationEstim = 5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $d_inst_exp
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      text:
        Trainingsdurchgänge abgeschlossen.
        Bei Fragen wenden Sie sich bitte an den:die Versuchsleiter:in im Nebenraum.


        Experiment durch Drücken der LEERTASTE beginnen.
    TextComponent instr_ex_cont
      letterHeight = 0.05
      startEstim = 5
      startVal [time (s)] = $d_inst_exp
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      text:
        Trainingsdurchgänge abgeschlossen.
        Bei Fragen wenden Sie sich bitte an den:die Versuchsleiter:in im Nebenraum.


        Experiment durch Drücken der LEERTASTE beginnen.
    KeyboardComponent kb_inst_exp
      allowedKeys = 'space'
      forceEndRoutine = True
      startEstim = 5
      startVal [time (s)] = $d_inst_exp
      store = nothing
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  Routine experiment
    ImageComponent img_exp
      image [set during: ITI_Exp.ISI_experiment] = $img_rel_path
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    TextboxComponent judgement_exp
      bold = False
      borderColor = -0.3020, -0.3020, -0.3020
      borderWidth = 1
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      opacity = 0.5
      pos = (0, -0.9)
      size = (0.15, 0.1)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_exp
      Code Type = Auto->JS
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      Begin Routine:
        modify = False
        judgement_exp.text = ''
        event.clearEvents('keyboard')
      Each Frame:
        keys = event.getKeys(['0', '1', '2', '3', '4', '5', '6', '7', '8', '9', '0', 'return', 'backspace'])

        if len(keys):
            if 'backspace' in keys:
                judgement_exp.text = judgement_exp.text[:-1]
            elif 'return' in keys and judgement_exp.text != '':
                continueRoutine = False
            elif 'return' in keys and judgement_exp.text == '':
                pass
            else:
                judgement_exp.text = judgement_exp.text + keys[0]
      End Routine:
        thisExp.addData("answer", judgement_exp.text)
        thisExp.addData("RT", t)
        thisExp.addData("looker_gender", looker[0])
  Routine end_screen
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      units = norm
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      text:
        Vielen Dank für Ihre Teilnahme.

        Bitte melden Sie sich bei dem:der Versuchsleiter:in.
  Routine ITI_Training
    TextComponent text_iti_train
      durationEstim = 0.5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $d_iti
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    StaticComponent ISI_training
      durationEstim = 0.5
      stopVal [duration (s)] = $d_iti
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    NoiseStimComponent noise
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = N-frames
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = White
      sf = None
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $d_iti
      units = norm
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  Routine ITI_Exp
    TextComponent text_iti_exp
      durationEstim = 0.5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $d_iti
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    StaticComponent ISI_experiment
      durationEstim = 0.5
      stopVal [duration (s)] = $d_iti
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Flow
  Routine instructions_start
  Routine instructions_training
  LoopInitiator trials_training loopType="TrialHandler"
    conditionsFile = cond_training.xlsx
    loopType = fullRandom
    nReps = 2
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    conditions:
      [{'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_00.JPG', 'img_rel_path': 'img_train\\F02_00.JPG', 'looker': 'F02', 'visAng': 0.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_01.JPG', 'img_rel_path': 'img_train\\F02_01.JPG', 'looker': 'F02', 'visAng': 1.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_02.JPG', 'img_rel_path': 'img_train\\F02_02.JPG', 'looker': 'F02', 'visAng': 2.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_03.JPG', 'img_rel_path': 'img_train\\F02_03.JPG', 'looker': 'F02', 'visAng': 3.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_04.JPG', 'img_rel_path': 'img_train\\F02_04.JPG', 'looker': 'F02', 'visAng': 4.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_05.JPG', 'img_rel_path': 'img_train\\F02_05.JPG', 'looker': 'F02', 'visAng': 5.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_06.JPG', 'img_rel_path': 'img_train\\F02_06.JPG', 'looker': 'F02', 'visAng': 6.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_07.JPG', 'img_rel_path': 'img_train\\F02_07.JPG', 'looker': 'F02', 'visAng': 7.0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_train\\F02_08.JPG', 'img_rel_path': 'img_train\\F02_08.JPG', 'looker': 'F02', 'visAng': 8.0}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
    Routine ITI_Training
    Routine training
  LoopTerminator trials_training
  Routine instructions_exp
  LoopInitiator trials_exp loopType="TrialHandler"
    conditionsFile = cond_exp.xlsx
    loopType = fullRandom
    nReps = 6
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    conditions:
      [{'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F01_00.jpg', 'img_rel_path': 'img_exp\\F01_00.jpg', 'looker': 'F01', 'visAng': 0, 'visAngCorr': 0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F01_02.jpg', 'img_rel_path': 'img_exp\\F01_02.jpg', 'looker': 'F01', 'visAng': 2, 'visAngCorr': 2.2},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F01_04.jpg', 'img_rel_path': 'img_exp\\F01_04.jpg', 'looker': 'F01', 'visAng': 4, 'visAngCorr': 4.4},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F01_06.jpg', 'img_rel_path': 'img_exp\\F01_06.jpg', 'looker': 'F01', 'visAng': 6, 'visAngCorr': 6.6},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F01_08.jpg', 'img_rel_path': 'img_exp\\F01_08.jpg', 'looker': 'F01', 'visAng': 8, 'visAngCorr': 8.8},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F01_12.jpg', 'img_rel_path': 'img_exp\\F01_12.jpg', 'looker': 'F01', 'visAng': 12, 'visAngCorr': 13.3},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F02_00.jpg', 'img_rel_path': 'img_exp\\F02_00.jpg', 'looker': 'F02', 'visAng': 0, 'visAngCorr': 0},
      {'img_path': 'C:\\Users\\calti\\Documents\\Masterarbeit\\PsychoPy\\img_exp\\F02_02.jpg', 'img_rel_path': 'img_exp\\F02_02.jpg', 'looker': 'F02', 'visAng': 2, 'visAngCorr': 2.2}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
    Routine ITI_Exp
    Routine experiment
  LoopTerminator trials_exp
  Routine end_screen
